PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {u'proficiency': u'', u'expLang': u'en,sp', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Use version = latest
  Save log file = False
  expName = lexTALE
  Screen = 1
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Routines
  Routine end
    TextComponent end_text
      text = ¡Gracias!
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_end
      stopVal [duration (s)] = 5.0
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine feedback
    CodeComponent code1
      Begin Experiment:
        msg='doh!'
      Begin Routine:
        if not key_resp_practice1.keys:
            msg="Failed to resond"
        elif key_resp_practice1.corr:
            msg="Correcto!"
        else:
            msg="Ooo! Wrong! Te has equivocado!"
    KeyboardComponent key_resp_feedback1
      stopVal [duration (s)] = 1.0
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent feedback1_text
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine practice
    TextComponent practice_text
      text [set every repeat] = $word
      startVal [time (s)] = 0.5
      letterHeight = 0.3
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    KeyboardComponent key_resp_practice1
      correctAns = $correct_response
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','0'
      startVal [time (s)] = 0.5
      store = first key
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    TextComponent practice_text2
      color = blue
      text [set every repeat] = $prac_label
      pos = (0, 0.75)
      startVal [time (s)] = 0.5
      letterHeight = 0.08
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    TextComponent practice_text_real
      color = green
      text [set every repeat] = $prac_button_real
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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    TextComponent practice_text_false
      color = red
      text [set every repeat] = $prac_button_false
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.5
      letterHeight = 0.2
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  Routine trial
    TextComponent trial_text
      text [set every repeat] = $word
      startVal [time (s)] = 0.5
      letterHeight = 0.3
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    TextComponent trial_text_real
      color = green
      text [set every repeat] = $button_real
      pos = (-0.5, -0.5)
      startVal [time (s)] = 0.25
      letterHeight = 0.2
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    TextComponent trial_text_false
      color = red
      text [set every repeat] = $button_false
      pos = (0.5, -0.5)
      startVal [time (s)] = 0.25
      letterHeight = 0.2
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    KeyboardComponent key_resp_trial
      correctAns = $correct_response
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = '1','0'
      startVal [time (s)] = 0.5
      store = first key
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  Routine check
    TextComponent check_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Any questions? ¿Preguntas?

        Press the space bar to begin.
        Presiona la barra espaciadora para comenzar.
    KeyboardComponent key_resp_check
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.5
      store = nothing
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  Routine instructions
    TextComponent instructions_text1
      text [set every repeat] = $instructions_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent instructions_key_resp_1
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = 'cond_files/instructions/instructions_' + $expInfo['expLang'] + '.csv'
    loopType = sequential
    nReps = 1
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    Routine instructions
  LoopTerminator instructions_loop
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = 'cond_files/trials/prac_trials_' + $expInfo['expLang'] + '.csv'
    loopType = sequential
    nReps = 1
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    Routine practice
    Routine feedback
  LoopTerminator practice_trials
  Routine check
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 'cond_files/trials/trials_' + $expInfo['expLang'] + '.csv'
    loopType = random
    nReps = 1
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    Routine trial
  LoopTerminator trials
  Routine end
